################################################
####                                        ####
#                                              #
#             Generic GATE PET-scanner         #
#             @Philip Kalaitizidis             #
#                                              #
####                                        ####
################################################

/gate/geometry/setMaterialDatabase data/GateMaterials.db

# Define top-hierarcy level volume.
/gate/world/geometry/setXLength 100 cm
/gate/world/geometry/setYLength 100 cm
/gate/world/geometry/setZLength 100 cm

# Visualization
/control/execute mac/visualization.mac

# Define PET geometry.
/control/execute mac/PET_geom.mac

# Define phantom.
/control/execute phantoms/wcc.mac

# Define the physics and cuts.
/control/execute mac/physics_L.mac
#/control/execute mac/physics_I.mac

# Define actors.
/control/execute mac/simstat.mac
/control/execute mac/mumap.mac

# Rebuild geometry
/gate/geometry/rebuild

# Initialize: triggers Geant4 to compute crossections
/gate/run/initialize

# Define digitizer
/control/execute mac/digitizer.mac

# Define source
/control/execute sources/wcc_src.mac

# Define output
/control/execute mac/output.mac

# Acquisition settings.
/gate/application/setTimeSlice 1 s
/gate/application/setTimeStart 0 s
/gate/application/setTimeStop  1 s

# Start acquisition
#/gate/application/startDAQ

